PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = weimo_psychopy
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine parameters
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    CodeComponent set_params
      Code Type = Auto->JS
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      Before Experiment:
        numReps = 6 # will be multiplied by 6
        # number of loops per block
        numBlocks = 1
        # number of blocks
        numPractice = 1 # will be multiplied by 2, always plays at least once
        # number of practice reps
        numJawReps = 36
        numJawBlocks = 1
  Routine go_cue
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    TextComponent go_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Imagine Moving
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  Routine fixation
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    PolygonComponent fixation_cross
      fillColor = white
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine ready_cue
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    TextComponent ready_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text:
        Observe
  Routine small_wait
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    TextComponent rest_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Rest
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  Routine welcome
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    TextComponent welcome_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment.
        Press space to move on.
    KeyboardComponent press_space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block_break
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    TextComponent block_break_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        You have completed this section
  Routine thanks
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    TextComponent thanks_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Thank you for participating!
        The application will close in a few seconds
  Routine prac_done
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    TextComponent prac_done_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have now completed the practice.
        Press space when ready to move on.
    KeyboardComponent press_space_done
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine jaw_transition
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    TextComponent jaw_transition_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        We will now move onto some trials of jaw clenches.
        Feel free to rest on the clenches
        Press space to move on
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine jclench_cue
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    TextComponent jaw_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Clench your jaw
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  Routine space_advance
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    TextComponent space
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press space to move onto the next trial
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    KeyboardComponent space_press
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_clip
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $thisClipPrac
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine clip_2
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    MovieComponent clip
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $thisClip
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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Flow
  Routine parameters
  Routine welcome
  LoopInitiator practice loopType="TrialHandler"
    Selected rows = 0:2
    conditionsFile = stimuli_sheet.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'thisClip': 'videos/walking1.mp4', 'thisClipPrac': 'videos/walking1.mp4'},
      {'thisClip': 'videos/walking2.mp4', 'thisClipPrac': 'videos/walking2.mp4'},
      {'thisClip': 'videos/walking3.mp4', 'thisClipPrac': None},
      {'thisClip': 'videos/walking4.mp4', 'thisClipPrac': None},
      {'thisClip': 'videos/walking5.mp4', 'thisClipPrac': None},
      {'thisClip': 'videos/walking6.mp4', 'thisClipPrac': None}]
    Routine fixation
    Routine ready_cue
    Routine practice_clip
    Routine go_cue
  LoopTerminator practice
  Routine prac_done
  LoopInitiator block loopType="TrialHandler"
    loopType = random
    nReps = numBlocks
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = stimuli_sheet.xlsx
      loopType = random
      nReps = numReps
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      conditions:
        [{'thisClip': 'videos/walking1.mp4', 'thisClipPrac': 'videos/walking1.mp4'},
        {'thisClip': 'videos/walking2.mp4', 'thisClipPrac': 'videos/walking2.mp4'},
        {'thisClip': 'videos/walking3.mp4', 'thisClipPrac': None},
        {'thisClip': 'videos/walking4.mp4', 'thisClipPrac': None},
        {'thisClip': 'videos/walking5.mp4', 'thisClipPrac': None},
        {'thisClip': 'videos/walking6.mp4', 'thisClipPrac': None}]
      Routine fixation
      Routine ready_cue
      Routine clip_2
      Routine go_cue
      Routine space_advance
    LoopTerminator trials
    Routine block_break
  LoopTerminator block
  Routine jaw_transition
  LoopInitiator jblock loopType="TrialHandler"
    loopType = random
    nReps = numJawBlocks
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    LoopInitiator jaw_trials loopType="TrialHandler"
      loopType = random
      nReps = numJawReps
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      Routine fixation
      Routine jclench_cue
      Routine space_advance
    LoopTerminator jaw_trials
    Routine block_break
  LoopTerminator jblock
  Routine thanks
